OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = EOG: Run
0xf8034a49 = Inria
Comment
  This scenario estimates a denoising regressor
  following the work of Schlögl and al., 2007.

  Here, EOG Denoising Calibration estimates
  the model using a more contaminated signal in the EOG
  input and the rest (EEG signal) in the EEG input.

  Press 'a' to in Keyboard Stimulator to start the
  model estimation. Press 'u' to stop. The model is
  output after the whole input has been processed.

  After the model has been estimated, it can be
  used with the 'eog-run.xml' scenario.

Generic stream reader => #0
  Filename = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/EOG/p08-eog-cal-sess1.ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Channel Selector "!65:72" => #2
  Channel List = 65:72
  Action = Reject
  Channel Matching Method = Smart
Data=#2 -> Signal display "EEG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1 -> Channel Selector "Ex 1; Ex 2; Ex 3; Ex 4" => #4
  Channel List = Ex 1; Ex 2; Ex 3; Ex 4
  Action = Select
  Channel Matching Method = Smart
Data=#4 -> Signal display "EOG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Keyboard stimulator => #6
  Filename = C:/Program Files/V3 Openvibe 3.0/Programme/share/openvibe/plugins/stimulation/simple-keyboard-to-stimulations.txt
EEG=#2, EOG=#4, Stimulations=#6 -> EOG_Denoising_Calibration
  Filename b Matrix = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/EOG/b-Matrix-EEG-sess1.cfg
  Train Trigger = OVTK_GDF_End_Of_Session
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
