OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

Generic stream reader => #0
  Filename = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/calibration/p8-cal-sess1.ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> Channel Selector "!65:72" => #2
  Channel List = 65:72
  Action = Reject
  Channel Matching Method = Smart
#1 -> Channel Selector "Ex 1; Ex 2; Ex 3; Ex 4" => #3
  Channel List = Ex 1; Ex 2; Ex 3; Ex 4
  Action = Select
  Channel Matching Method = Smart
EEG=#2, EOG=#3 -> EOG Denoising => #4
  Filename b Matrix = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/EOG/b-Matrix-EEG-sess1.cfg
Input stream 1=#4, Input stream 2=#0.Output stream 3 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Left trials" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Right trials" => #7
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#5.Output stream 2, Signal condition 1=#6, Signal condition 2=#7 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/CSP/p8-csp-sess1.cfg
  Filter dimension = 16
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
