OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> Channel Selector "!65:72" => #2
  Channel List = 65:72
  Action = Reject
  Channel Matching Method = Smart
#1 -> Channel Selector "Ex 1; Ex 2; Ex 3; Ex 4" => #3
  Channel List = Ex 1; Ex 2; Ex 3; Ex 4
  Action = Select
  Channel Matching Method = Smart
EEG=#2, EOG=#3 -> EOG Denoising
  Filename b Matrix = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/EOG/b-Matrix-EEG-sess1.cfg
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/CSP/p8-csp-sess1.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/CSP/p8-lda-sess1.cfg
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf8/EEG BCI/online/p8-online-sess1-b4.ov
  Use compression = false
Graz Motor Imagery BCI Stimulator => #13
  Lua Script = C:/Program Files/V3 Openvibe 3.0/Programme/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 15
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Stimulations=#13, Amplitude=#11.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
