OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Temporal filtering
  We remove the 50 Hz noise with a notch filter
  and select only the frequency range between
  1 and 40 Hz.
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Topographies
  We display the alpha band power
  on a 2D and a 3D map
Comment
  Spatial filter
  We compute the surface Laplacians
  around C3 and C4.
Comment
  Spectral analysis
  The decimation downsamples the
  signal from 512 Hz to 64 Hz.
  The spectrum is thus computed up to 32Hz

0x341d3912 Generic stream reader
  Filename = C:/Users/csimon/Desktop/2 Stage BCI/Data/nf2/EEG BCI/Rest/tominterest.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Temporal filter "Notch 50Hz"
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
-> Temporal filter "1-40 Hz" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Matrix=#3 -> Signal
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.01
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColor}

0x341d3912 Common Average Reference

Channel Selector "FT7;FT8;FC3;FCz;Cz;CPz;Fz;CPz;P3;P4"
  Channel List = FT7;FT8;FC3;FCz;Cz;CPz;Fz;CPz;P3;P4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Channel Rename
  New channel names = L.C3;L.C4
-> Temporal filter "8-30 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Signal Decimation
  Decimation factor = 2
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = .0625
-> Spectral Analysis => #12
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#12.Amplitude -> Epoch average => #13
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 5
Matrix=#13 -> T/F Analysis
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Gain = 0.01
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#13 -> Spectrum
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.01
  Caption =
  Tranlucency = 1.000000
  Color = ${AdvancedViz_DefaultColorGradient}

Temporal filter "8-15 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #19
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> 2D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.025
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#19 -> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.03
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
